<CompuCell3D Revision="20190426" Version="3.7.9">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="300" y="100" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   <Metadata>
   <DebugOutputFrequency>100</DebugOutputFrequency>
</Metadata>

   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Cell"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="Cell" LambdaVolume="1.0" TargetVolume="36"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Cell">10.0</Energy>
      <Energy Type1="Cell" Type2="Cell">10.0</Energy>
      <NeighborOrder>3</NeighborOrder>
   </Plugin>
   <Plugin Name="BoundaryPixelTracker">
   
    <!-- Module tracking boundary pixels of each cell -->
    <NeighborOrder>1</NeighborOrder>
    </Plugin>

   <Plugin Name="Chemotaxis">
      
      <!-- You may repeat ChemicalField element for each chemical field declared in the PDE solvers -->
      <!-- Specification of chemotaxis properties of select cell types. -->
      <ChemicalField Name="attr" Source="DiffusionSolverFE">
         <ChemotaxisByType Lambda="50.0" Type="Cell" FormulaName = "SaturationDifferenceChemotaxisFormula" SaturationCoef = "5.0"/>
      </ChemicalField>
   </Plugin>
   
   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="attr">
         <DiffusionData>
            <FieldName>attr</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <GlobalDecayConstant>0</GlobalDecayConstant>
            <!-- Additional options are: -->
            <InitialConcentrationExpression>0.0333*x</InitialConcentrationExpression> 
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="Cell">0.1</DiffusionCoefficient>
            
         </DiffusionData>
         
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="10.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               
               <!-- Other options are (examples): -->
                <Periodic/> 
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
   <Steppable Type="BlobInitializer">
      
      <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
      <Region>
         <Center x="10" y="50" z="0"/>
         <Radius>3</Radius>
         <Gap>0</Gap>
         <Width>6</Width>
         <Types>Cell</Types>
      </Region>
   </Steppable>
</CompuCell3D>
