<CompuCell3D Revision="20171208" Version="3.7.7">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="1000" y="1000" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="cell"/>
   </Plugin>
   
   <Plugin Name="Pressure">
   </Plugin>
   

   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">5.0</Energy>
      <Energy Type1="Medium" Type2="cell">5.0</Energy>
      <Energy Type1="cell" Type2="cell">5.0</Energy>
      <NeighborOrder>3</NeighborOrder>
   </Plugin>
   
   <Steppable Type="BlobInitializer">
      
      <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
      <Region>
         <Center x="500" y="500" z="0"/>
         <Radius>25</Radius>
         <Gap>0</Gap>
         <Width>25</Width>
         <Types>cell</Types>
      </Region>
   </Steppable>
</CompuCell3D>
